<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.Pylon;assembly=Bonsai.Pylon"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:PylonCapture">
          <p1:SerialNumber>21421611</p1:SerialNumber>
          <p1:ParameterFile>C:\Users\Branco-Behav1\camera_pylon_param_files\acA1300-60gmNIR_21421611_triggered-sync-update.pfs</p1:ParameterFile>
          <p1:GrabStrategy>OneByOne</p1:GrabStrategy>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>B:\Philip\TEST\cam.avi</cv:FileName>
          <cv:Suffix>FileCount</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>40</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Extract centroid</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BackgroundSubtraction">
                <cv:BackgroundFrames>10</cv:BackgroundFrames>
                <cv:AdaptationRate>0.0001</cv:AdaptationRate>
                <cv:ThresholdValue>18</cv:ThresholdValue>
                <cv:ThresholdType>Binary</cv:ThresholdType>
                <cv:SubtractionMethod>Dark</cv:SubtractionMethod>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>External</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea>1000</cv:MinArea>
                <cv:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Centroid</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Laser trip wire</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Detect threshold crossings</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:PythonTransform">
                    <scr:Name>Within circle</scr:Name>
                    <scr:Script>@returns(bool)
def process(value):
  x = value.X
  y = value.Y
  # How far is the tracked object from point of interest?
  distance_from_left = ((x - 626)**2 + (y - 284)**2)**.5

  # Is it within the circle?
  mouse_near_L_edge = (distance_from_left &lt; 162)

  return mouse_near_L_edge</scr:Script>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="LogicalAnd" />
                  <Expression xsi:type="scr:PythonTransform">
                    <scr:Name>On the right side</scr:Name>
                    <scr:Script>@returns(bool)
def process(value):
  x = value.X
  y = value.Y
  # On correct side
  from_correct_side = y &gt; (-2.5225*x + 2025.1)

  return from_correct_side</scr:Script>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="LogicalAnd" />
                  <Expression xsi:type="MemberSelector">
                    <Selector>X</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Difference">
                      <dsp:Order>1</dsp:Order>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Buffer">
                      <rx:Count>10</rx:Count>
                      <rx:Skip xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Add" />
                  <Expression xsi:type="LessThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>-1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="LogicalAnd" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="0" To="8" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="13" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Laser ready</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>F3</wie:Filter>
                <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Fire laser</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Name>Fire laser</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>4.25</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Laser amplitude</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Laser amplitude</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>Laser amplitude</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:FunctionGenerator">
                      <dsp:BufferLength>3000</dsp:BufferLength>
                      <dsp:Frequency>20</dsp:Frequency>
                      <dsp:Waveform>Square</dsp:Waveform>
                      <dsp:SampleRate>30000</dsp:SampleRate>
                      <dsp:Depth>F32</dsp:Depth>
                      <dsp:Amplitude>0.1</dsp:Amplitude>
                      <dsp:Offset>0.1</dsp:Offset>
                      <dsp:Phase>0</dsp:Phase>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Laser amplitude</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="MaxValue" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Threshold">
                      <dsp:ThresholdValue>0</dsp:ThresholdValue>
                      <dsp:MaxValue>0</dsp:MaxValue>
                      <dsp:ThresholdType>Binary</dsp:ThresholdType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Start session</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SkipUntil" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>End session</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="mx:AnalogOutput">
                      <mx:SignalSource />
                      <mx:SampleRate>30000</mx:SampleRate>
                      <mx:ActiveEdge>Rising</mx:ActiveEdge>
                      <mx:SampleMode>ContinuousSamples</mx:SampleMode>
                      <mx:BufferSize>3000</mx:BufferSize>
                      <mx:Channels>
                        <mx:AnalogOutputChannelConfiguration>
                          <mx:ChannelName>Blue laser</mx:ChannelName>
                          <mx:MinimumValue>0</mx:MinimumValue>
                          <mx:MaximumValue>10</mx:MaximumValue>
                          <mx:PhysicalChannel>Dev3/ao0</mx:PhysicalChannel>
                          <mx:VoltageUnits>Volts</mx:VoltageUnits>
                        </mx:AnalogOutputChannelConfiguration>
                      </mx:Channels>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:MatrixWriter">
                      <dsp:Path>B:\Philip\TEST\laser_fire.bin</dsp:Path>
                      <dsp:Suffix>FileCount</dsp:Suffix>
                      <dsp:Overwrite>false</dsp:Overwrite>
                      <dsp:Layout>ColumnMajor</dsp:Layout>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="7" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="13" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="15" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="17" Label="Source1" />
                  <Edge From="16" To="17" Label="Source2" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>B:\Philip\Laser timestamps\laser_fire.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>FileCount</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Laser ready</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>F1</wie:Filter>
                <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Laser ready</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="MulticastSubject">
              <Name>Laser ready</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="15" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Threat trip wire</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Threat trigger</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Y</Selector>
                  </Expression>
                  <Expression xsi:type="scr:PythonTransform">
                    <scr:Name>In the middle</scr:Name>
                    <scr:Script>@returns(bool)
def process(value):
  y = value
  # On correct side
  in_the_middle = (abs(y) - 512) &lt; 200
  return in_the_middle</scr:Script>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>X</Selector>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="FloatProperty">
                      <Value>850</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="LogicalAnd" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT1.5S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="LogicalAnd" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Difference">
                      <dsp:Order>1</dsp:Order>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Buffer">
                      <rx:Count>10</rx:Count>
                      <rx:Skip xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Add" />
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>5</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="LogicalAnd" />
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="BehaviorSubject">
                    <Name>x pos</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="3" To="10" Label="Source1" />
                  <Edge From="3" To="17" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="6" To="8" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="14" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Sound ready</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="LogicalAnd" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>F7</wie:Filter>
                <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Play sound</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Name>Play sound</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Which sound</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>Play sound</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sound ready</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT45S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sound ready</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Stim timer</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT12S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Stim timer</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>Which sound</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Play sound</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Which sound</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Switch sounds</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Name>Switch sounds</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Switch sounds</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT45S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>Which sound</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Switch sounds</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Play sound</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Which sound</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="GreaterThanOrEqual">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Name>Play smash</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SelectMany">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>smash</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="al:AudioPlayback">
                      <al:SampleRate>44100</al:SampleRate>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="LessThan">
                    <Operand xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Name>Play cracks</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SelectMany">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>cracks</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="al:AudioPlayback">
                      <al:SampleRate>44100</al:SampleRate>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT1.5S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>x pos</Name>
                  </Expression>
                  <Expression xsi:type="GreaterThanOrEqual">
                    <Operand xsi:type="IntProperty">
                      <Value>200</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Stim timer</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Name>Stim timer on</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Name>Not in shelter</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Play sound</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>Switch sounds</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>Stim timer</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Play sound</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="5" To="11" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="18" To="21" Label="Source1" />
                  <Edge From="19" To="27" Label="Source2" />
                  <Edge From="20" To="21" Label="Source2" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="33" To="35" Label="Source1" />
                  <Edge From="34" To="35" Label="Source2" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="37" Label="Source1" />
                  <Edge From="36" To="41" Label="Source1" />
                  <Edge From="36" To="45" Label="Source1" />
                  <Edge From="37" To="38" Label="Source1" />
                  <Edge From="38" To="39" Label="Source1" />
                  <Edge From="39" To="40" Label="Source1" />
                  <Edge From="41" To="42" Label="Source1" />
                  <Edge From="42" To="43" Label="Source1" />
                  <Edge From="43" To="44" Label="Source1" />
                  <Edge From="45" To="49" Label="Source1" />
                  <Edge From="46" To="47" Label="Source1" />
                  <Edge From="47" To="52" Label="Source2" />
                  <Edge From="48" To="49" Label="Source2" />
                  <Edge From="49" To="50" Label="Source1" />
                  <Edge From="50" To="51" Label="Source1" />
                  <Edge From="51" To="52" Label="Source1" />
                  <Edge From="52" To="53" Label="Source1" />
                  <Edge From="53" To="54" Label="Source1" />
                  <Edge From="54" To="55" Label="Source1" />
                  <Edge From="55" To="56" Label="Source1" />
                  <Edge From="57" To="58" Label="Source1" />
                  <Edge From="59" To="60" Label="Source1" />
                  <Edge From="61" To="62" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>B:\Philip\Sound timestamps\sound_on.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>FileCount</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Sound ready</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>F5</wie:Filter>
                <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Sound ready</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="MulticastSubject">
              <Name>Sound ready</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="15" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>GrabResult.ID</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Timer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TimeInterval" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Interval.TotalSeconds</Selector>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="Multiply">
              <Operand xsi:type="DoubleProperty">
                <Value>0.01666666666</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0:F2}</Format>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>GrabResult.ID,GrabResult.SkippedImageCount,GrabResult.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>B:\Philip\Skipped images\frames.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>FileCount</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Triggers</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:FunctionGenerator">
                <dsp:BufferLength>3000</dsp:BufferLength>
                <dsp:Frequency>40</dsp:Frequency>
                <dsp:Waveform>Square</dsp:Waveform>
                <dsp:SampleRate>30000</dsp:SampleRate>
                <dsp:Depth>F64</dsp:Depth>
                <dsp:Amplitude>2.5</dsp:Amplitude>
                <dsp:Offset>2.5</dsp:Offset>
                <dsp:Phase>0</dsp:Phase>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:ScalarBuffer">
                <dsp:Size>
                  <dsp:Width>3000</dsp:Width>
                  <dsp:Height>1</dsp:Height>
                </dsp:Size>
                <dsp:Depth>F64</dsp:Depth>
                <dsp:Channels>1</dsp:Channels>
                <dsp:Value>
                  <dsp:Val0>0</dsp:Val0>
                  <dsp:Val1>0</dsp:Val1>
                  <dsp:Val2>0</dsp:Val2>
                  <dsp:Val3>0</dsp:Val3>
                </dsp:Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start session</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SkipUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>F10</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:ScalarBuffer">
                <dsp:Size>
                  <dsp:Width>3000</dsp:Width>
                  <dsp:Height>1</dsp:Height>
                </dsp:Size>
                <dsp:Depth>F64</dsp:Depth>
                <dsp:Channels>1</dsp:Channels>
                <dsp:Value>
                  <dsp:Val0>0</dsp:Val0>
                  <dsp:Val1>0</dsp:Val1>
                  <dsp:Val2>0</dsp:Val2>
                  <dsp:Val3>0</dsp:Val3>
                </dsp:Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DelaySubscription">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="mx:DigitalOutput">
                <mx:Channels>
                  <mx:DigitalOutputChannelConfiguration>
                    <mx:ChannelName>Camera_trigger</mx:ChannelName>
                    <mx:Grouping>OneChannelForEachLine</mx:Grouping>
                    <mx:Lines>Dev3/port0/line0</mx:Lines>
                  </mx:DigitalOutputChannelConfiguration>
                </mx:Channels>
                <mx:SampleRate>30000</mx:SampleRate>
                <mx:ActiveEdge>Rising</mx:ActiveEdge>
                <mx:SampleMode>ContinuousSamples</mx:SampleMode>
                <mx:BufferSize>3000</mx:BufferSize>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="mx:AnalogInput">
                <mx:SignalSource />
                <mx:SampleRate>30000</mx:SampleRate>
                <mx:ActiveEdge>Rising</mx:ActiveEdge>
                <mx:SampleMode>ContinuousSamples</mx:SampleMode>
                <mx:BufferSize>3000</mx:BufferSize>
                <mx:SamplesPerRead>-1</mx:SamplesPerRead>
                <mx:Channels>
                  <mx:AnalogInputChannelConfiguration>
                    <mx:ChannelName>Camera_trigger_read</mx:ChannelName>
                    <mx:MinimumValue>-10</mx:MinimumValue>
                    <mx:MaximumValue>10</mx:MaximumValue>
                    <mx:PhysicalChannel>Dev3/ai0</mx:PhysicalChannel>
                    <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
                    <mx:VoltageUnits>Volts</mx:VoltageUnits>
                  </mx:AnalogInputChannelConfiguration>
                  <mx:AnalogInputChannelConfiguration>
                    <mx:ChannelName>AudioInput</mx:ChannelName>
                    <mx:MinimumValue>-10</mx:MinimumValue>
                    <mx:MaximumValue>10</mx:MaximumValue>
                    <mx:PhysicalChannel>Dev3/ai6</mx:PhysicalChannel>
                    <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
                    <mx:VoltageUnits>Volts</mx:VoltageUnits>
                  </mx:AnalogInputChannelConfiguration>
                </mx:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start session</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SkipUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>End session</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>B:\Philip\TEST\analog.bin</dsp:Path>
                <dsp:Suffix>FileCount</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>F10</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>End session</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="8" Label="Source2" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source3" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioReader">
          <al:FileName>C:\Users\Branco-Behav1\Downloads\1point5sec_smash.wav</al:FileName>
          <al:BufferLength>10</al:BufferLength>
        </Combinator>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>smash</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioReader">
          <al:FileName>C:\Users\Branco-Behav1\Downloads\1point5sec_cracks.wav</al:FileName>
          <al:BufferLength>10</al:BufferLength>
        </Combinator>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>cracks</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>VisualStimulus</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>640</gl:Width>
                <gl:Height>480</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>#282828</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Fullscreen</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>0</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicViewport.bonsai">
              <Left>-40</Left>
              <Right>40</Right>
              <Bottom>-30</Bottom>
              <Top>30</Top>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SyncSquare</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:RenderFrame" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicViewport.bonsai">
                    <Left>-1</Left>
                    <Right>1</Right>
                    <Bottom>-1</Bottom>
                    <Top>1</Top>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Sync</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ColorR" />
                      <Property Name="ColorG" />
                      <Property Name="ColorB" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>0.4</ExtentX>
                    <ExtentY>0.4</ExtentY>
                    <LocationX>0.9</LocationX>
                    <LocationY>0.9</LocationY>
                    <ColorR>0</ColorR>
                    <ColorG>0</ColorG>
                    <ColorB>0</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>Sync</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT3S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Start session</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>F8</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>smash</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioPlayback">
          <al:SampleRate>44100</al:SampleRate>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>F12</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>cracks</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioPlayback">
          <al:SampleRate>44100</al:SampleRate>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="6" Label="Source1" />
      <Edge From="0" To="9" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>